# Generated by Configurator on Thu Oct 01 18:22:35 PDT 2020

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,COM2,SerialManager,COM2
Device,COM3,SerialManager,COM3
Device,COM4,SerialManager,COM4
Device,TIScope,NikonTI,TIScope
Device,TIAnalyzer,NikonTI,TIAnalyzer
Device,TIDiaShutter,NikonTI,TIDiaShutter
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,QuantEM,PVCAM,Camera-1
Device,Wheel-A,SutterLambda,Wheel-A
Device,Wheel-B,SutterLambda,Wheel-B
Device,Wheel-C,SutterLambda,Wheel-C
Device,Shutter-A,SutterLambda,Shutter-A
Device,Shutter-B,SutterLambda,Shutter-B
Device,XYStage,Prior,XYStage

# Pre-init settings for devices
Property,COM1,AnswerTimeout,2000.0000
Property,COM1,BaudRate,9600
Property,COM1,DataBits,8
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Fast USB to Serial,Disable
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM2,AnswerTimeout,500.0000
Property,COM2,BaudRate,9600
Property,COM2,DataBits,8
Property,COM2,DelayBetweenCharsMs,0.0000
Property,COM2,Fast USB to Serial,Disable
Property,COM2,Handshaking,Off
Property,COM2,Parity,None
Property,COM2,StopBits,1
Property,COM2,Verbose,1
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,Wheel-A,Port,COM1
Property,Wheel-A,Timeout(ms),500
Property,Wheel-B,Port,COM1
Property,Wheel-B,Timeout(ms),500
Property,Wheel-C,Port,COM1
Property,Wheel-C,Timeout(ms),500
Property,Shutter-A,Port,COM1
Property,Shutter-B,Port,COM1
Property,XYStage,Port,COM4

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TIAnalyzer,TIScope
Parent,TIDiaShutter,TIScope
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,TIZDrive,1
FocusDirection,TIPFSOffset,1

# Roles
Property,Core,Camera,QuantEM
Property,Core,Shutter,Shutter-A
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Open
Label,TINosePiece,4,5-Open
Label,TINosePiece,3,4-Plan Apo 100x NA 1.45 Oil
Label,TINosePiece,2,3-Plan Fluor 40x NA 1.30 Oil
Label,TINosePiece,1,2-Plan 20x NA 0.40 Dry
Label,TINosePiece,0,1-Plan 10x NA 0.25 Dry
# TIFilterBlock1
Label,TIFilterBlock1,5,6-TxRed
Label,TIFilterBlock1,4,5-GFP-L
Label,TIFilterBlock1,3,4-560LP
Label,TIFilterBlock1,2,3-595LP
Label,TIFilterBlock1,1,2-455LP
Label,TIFilterBlock1,0,1-DIC
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100
# Wheel-A
Label,Wheel-A,9,760/20
Label,Wheel-A,8,470/30
Label,Wheel-A,7,580/20
Label,Wheel-A,6,515/10
Label,Wheel-A,5,open
Label,Wheel-A,4,495/10
Label,Wheel-A,3,660/20
Label,Wheel-A,2,546/11
Label,Wheel-A,1,630/30
Label,Wheel-A,0,420/40
# Wheel-B
Label,Wheel-B,9,open
Label,Wheel-B,8,closed
Label,Wheel-B,7,closed
Label,Wheel-B,6,700/75
Label,Wheel-B,5,650/100
Label,Wheel-B,4,630/20
Label,Wheel-B,3,575/20
Label,Wheel-B,2,open
Label,Wheel-B,1,535/30
Label,Wheel-B,0,480/40
# Wheel-C
Label,Wheel-C,9,Filter-9
Label,Wheel-C,8,Filter-8
Label,Wheel-C,7,Filter-7
Label,Wheel-C,6,Filter-6
Label,Wheel-C,5,Filter-5
Label,Wheel-C,4,Filter-4
Label,Wheel-C,3,32%
Label,Wheel-C,2,10%
Label,Wheel-C,1,1%
Label,Wheel-C,0,100%

# Configuration presets
# Group: Magnification
# Preset: 3-Plan Fluor 40x NA 1.30 Oil
ConfigGroup,Magnification,3-Plan Fluor 40x NA 1.30 Oil,TINosePiece,Label,3-Plan Fluor 40x NA 1.30 Oil

# Preset: 5-Open5
ConfigGroup,Magnification,5-Open5,TINosePiece,Label,5-Open

# Preset: 6-Open6
ConfigGroup,Magnification,6-Open6,TINosePiece,Label,6-Open

# Preset: 2-Plan 20x NA 0.40 Dry
ConfigGroup,Magnification,2-Plan 20x NA 0.40 Dry,TINosePiece,Label,2-Plan 20x NA 0.40 Dry

# Preset: 1-Plan 10x NA 0.25 Dry
ConfigGroup,Magnification,1-Plan 10x NA 0.25 Dry,TINosePiece,Label,1-Plan 10x NA 0.25 Dry

# Preset: 4-Plan Apo 100x NA 1.45 Oil
ConfigGroup,Magnification,4-Plan Apo 100x NA 1.45 Oil,TINosePiece,Label,4-Plan Apo 100x NA 1.45 Oil


# Group: Channel
# Preset: BL10x
ConfigGroup,Channel,BL10x,TIFilterBlock1,Label,3-595LP
ConfigGroup,Channel,BL10x,Wheel-A,Label,470/30
ConfigGroup,Channel,BL10x,Wheel-B,Label,650/100
ConfigGroup,Channel,BL10x,Wheel-C,Label,10%
ConfigGroup,Channel,BL10x,Shutter-A,State,0
ConfigGroup,Channel,BL10x,Shutter-B,State,0
ConfigGroup,Channel,BL10x,Core,AutoShutter,1
ConfigGroup,Channel,BL10x,Core,Shutter,Shutter-A

# Preset: DIC
ConfigGroup,Channel,DIC,TIFilterBlock1,Label,1-DIC
ConfigGroup,Channel,DIC,Wheel-A,Label,open
ConfigGroup,Channel,DIC,Wheel-B,Label,open
ConfigGroup,Channel,DIC,Shutter-A,State,0
ConfigGroup,Channel,DIC,Shutter-B,State,0
ConfigGroup,Channel,DIC,Core,AutoShutter,1
ConfigGroup,Channel,DIC,Core,Shutter,TIDiaShutter
ConfigGroup,Channel,DIC,Wheel-C,Label,100%

# Preset: YFP
ConfigGroup,Channel,YFP,TIFilterBlock1,Label,5-GFP-L
ConfigGroup,Channel,YFP,Wheel-A,Label,515/10
ConfigGroup,Channel,YFP,Wheel-B,Label,open
ConfigGroup,Channel,YFP,Shutter-A,State,0
ConfigGroup,Channel,YFP,Shutter-B,State,0
ConfigGroup,Channel,YFP,Core,AutoShutter,1
ConfigGroup,Channel,YFP,Core,Shutter,Shutter-A
ConfigGroup,Channel,YFP,Wheel-C,Label,100%

# Preset: tgRFPt
ConfigGroup,Channel,tgRFPt,TIFilterBlock1,Label,4-560LP
ConfigGroup,Channel,tgRFPt,Wheel-A,Label,546/11
ConfigGroup,Channel,tgRFPt,Wheel-B,Label,575/20
ConfigGroup,Channel,tgRFPt,Shutter-A,State,0
ConfigGroup,Channel,tgRFPt,Shutter-B,State,0
ConfigGroup,Channel,tgRFPt,Core,AutoShutter,1
ConfigGroup,Channel,tgRFPt,Core,Shutter,Shutter-A
ConfigGroup,Channel,tgRFPt,Wheel-C,Label,10%

# Preset: BL495
ConfigGroup,Channel,BL495,TIFilterBlock1,Label,3-595LP
ConfigGroup,Channel,BL495,Wheel-A,Label,495/10
ConfigGroup,Channel,BL495,Wheel-B,Label,650/100
ConfigGroup,Channel,BL495,Wheel-C,Label,1%
ConfigGroup,Channel,BL495,Shutter-A,State,0
ConfigGroup,Channel,BL495,Shutter-B,State,0
ConfigGroup,Channel,BL495,Core,AutoShutter,1
ConfigGroup,Channel,BL495,Core,Shutter,Shutter-A

# Preset: GFP
ConfigGroup,Channel,GFP,TIFilterBlock1,Label,5-GFP-L
ConfigGroup,Channel,GFP,Wheel-A,Label,470/30
ConfigGroup,Channel,GFP,Wheel-B,Label,open
ConfigGroup,Channel,GFP,Shutter-A,State,0
ConfigGroup,Channel,GFP,Shutter-B,State,0
ConfigGroup,Channel,GFP,Core,AutoShutter,1
ConfigGroup,Channel,GFP,Core,Shutter,Shutter-A
ConfigGroup,Channel,GFP,Wheel-C,Label,100%

# Preset: BL515
ConfigGroup,Channel,BL515,TIFilterBlock1,Label,3-595LP
ConfigGroup,Channel,BL515,Wheel-A,Label,515/10
ConfigGroup,Channel,BL515,Wheel-B,Label,650/100
ConfigGroup,Channel,BL515,Shutter-A,State,0
ConfigGroup,Channel,BL515,Shutter-B,State,0
ConfigGroup,Channel,BL515,Core,AutoShutter,1
ConfigGroup,Channel,BL515,Core,Shutter,Shutter-A
ConfigGroup,Channel,BL515,Wheel-C,Label,10%

# Preset: TxRed
ConfigGroup,Channel,TxRed,TIFilterBlock1,Label,6-TxRed
ConfigGroup,Channel,TxRed,Wheel-A,Label,open
ConfigGroup,Channel,TxRed,Wheel-B,Label,open
ConfigGroup,Channel,TxRed,Shutter-A,State,0
ConfigGroup,Channel,TxRed,Shutter-B,State,0
ConfigGroup,Channel,TxRed,Core,AutoShutter,1
ConfigGroup,Channel,TxRed,Core,Shutter,Shutter-A
ConfigGroup,Channel,TxRed,Wheel-C,Label,100%

# Preset: BL
ConfigGroup,Channel,BL,TIFilterBlock1,Label,3-595LP
ConfigGroup,Channel,BL,Wheel-A,Label,470/30
ConfigGroup,Channel,BL,Wheel-B,Label,650/100
ConfigGroup,Channel,BL,Shutter-A,State,0
ConfigGroup,Channel,BL,Shutter-B,State,0
ConfigGroup,Channel,BL,Core,AutoShutter,1
ConfigGroup,Channel,BL,Core,Shutter,Shutter-A
ConfigGroup,Channel,BL,Wheel-C,Label,1%

# Preset: CFP
ConfigGroup,Channel,CFP,TIFilterBlock1,Label,2-455LP
ConfigGroup,Channel,CFP,Wheel-A,Label,420/40
ConfigGroup,Channel,CFP,Wheel-B,Label,480/40
ConfigGroup,Channel,CFP,Shutter-A,State,0
ConfigGroup,Channel,CFP,Shutter-B,State,0
ConfigGroup,Channel,CFP,Core,AutoShutter,1
ConfigGroup,Channel,CFP,Core,Shutter,Shutter-A
ConfigGroup,Channel,CFP,Wheel-C,Label,32%

# Preset: shadow
ConfigGroup,Channel,shadow,TIFilterBlock1,Label,4-560LP
ConfigGroup,Channel,shadow,Wheel-A,Label,580/20
ConfigGroup,Channel,shadow,Wheel-B,Label,open
ConfigGroup,Channel,shadow,Wheel-C,Label,1%
ConfigGroup,Channel,shadow,Shutter-A,State,0
ConfigGroup,Channel,shadow,Shutter-B,State,0
ConfigGroup,Channel,shadow,Core,AutoShutter,1
ConfigGroup,Channel,shadow,Core,Shutter,Shutter-A

# Preset: mCherry
ConfigGroup,Channel,mCherry,TIFilterBlock1,Label,3-595LP
ConfigGroup,Channel,mCherry,Wheel-A,Label,580/20
ConfigGroup,Channel,mCherry,Wheel-B,Label,650/100
ConfigGroup,Channel,mCherry,Shutter-A,State,0
ConfigGroup,Channel,mCherry,Shutter-B,State,0
ConfigGroup,Channel,mCherry,Core,AutoShutter,1
ConfigGroup,Channel,mCherry,Core,Shutter,Shutter-A
ConfigGroup,Channel,mCherry,Wheel-C,Label,100%


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,QuantEM,Exposure,200.0000
ConfigGroup,System,Startup,Wheel-C,Label,1%
ConfigGroup,System,Startup,Wheel-A,Speed,1
ConfigGroup,System,Startup,Wheel-B,Speed,1
ConfigGroup,System,Startup,Wheel-C,Speed,1
ConfigGroup,System,Startup,QuantEM,ClearMode,Pre-Exposure
ConfigGroup,System,Startup,QuantEM,MultiplierGain,225
ConfigGroup,System,Startup,QuantEM,Offset,0
ConfigGroup,System,Startup,QuantEM,PMode,Frame Transfer
ConfigGroup,System,Startup,QuantEM,Port,Multiplication Gain
ConfigGroup,System,Startup,QuantEM,ReadoutRate,10MHz 16bit
ConfigGroup,System,Startup,QuantEM,TransposeMirrorX,0
ConfigGroup,System,Startup,QuantEM,TransposeMirrorY,0
ConfigGroup,System,Startup,XYStage,Acceleration,80
ConfigGroup,System,Startup,XYStage,MaxSpeed,10
ConfigGroup,System,Startup,XYStage,SCurve,80
ConfigGroup,System,Startup,QuantEM,Gain,1
ConfigGroup,System,Startup,QuantEM,ClearCycles,2


# Group: LightPath
# Preset: 2-Left100
ConfigGroup,LightPath,2-Left100,TILightPath,Label,2-Left100

# Preset: 3-Right100
ConfigGroup,LightPath,3-Right100,TILightPath,Label,3-Right100

# Preset: 1-Eye100
ConfigGroup,LightPath,1-Eye100,TILightPath,Label,1-Eye100

# Preset: 4-Left80
ConfigGroup,LightPath,4-Left80,TILightPath,Label,4-Left80


# Group: ND
# Preset: 32%
ConfigGroup,ND,32%,Wheel-C,Label,32%

# Preset: 100%
ConfigGroup,ND,100%,Wheel-C,Label,100%

# Preset: 10%
ConfigGroup,ND,10%,Wheel-C,Label,10%

# Preset: 1%
ConfigGroup,ND,1%,Wheel-C,Label,1%



# PixelSize settings

